PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u'test', u'condition': u'midd'}
  expName = prodShadow
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 1.0
      store = first key
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    ImageComponent image
      startVal [time (s)] = 0.5
      image [set every repeat] = $stim
      size = [0.75, 0.95]
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  Routine ident
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Di tu nombre completo.

        Luego presiona la barra espaciadora para continuar.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent text_2
      text = Gracias por participar
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instr
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Di el nombre de las imagenes que aparecen a continuacion

        Presiona la barra espaciadora para continuar.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 2.0
      store = nothing
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Flow
  Routine ident
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{u'status': u'distractor', u'stim': u'stim/sombrero.png'},
      {u'status': u'distractor', u'stim': u'stim/sol.png'},
      {u'status': u'distractor', u'stim': u'stim/arbol.png'},
      {u'status': u'distractor', u'stim': u'stim/lapiz.png'},
      {u'status': u'distractor', u'stim': u'stim/manzana.png'},
      {u'status': u'distractor', u'stim': u'stim/libro.png'},
      {u'status': u'distractor', u'stim': u'stim/silla.png'},
      {u'status': u'distractor', u'stim': u'stim/mochila.png'},
      {u'status': u'target', u'stim': u'stim/bala.png'},
      {u'status': u'target', u'stim': u'stim/bola.png'},
      {u'status': u'target', u'stim': u'stim/caca.png'},
      {u'status': u'target', u'stim': u'stim/coco.png'},
      {u'status': u'target', u'stim': u'stim/dado.png'},
      {u'status': u'target', u'stim': u'stim/dodo.png'},
      {u'status': u'target', u'stim': u'stim/gato.png'},
      {u'status': u'target', u'stim': u'stim/gota.png'},
      {u'status': u'target', u'stim': u'stim/palo.png'},
      {u'status': u'target', u'stim': u'stim/polo.png'},
      {u'status': u'target', u'stim': u'stim/taco.png'},
      {u'status': u'target', u'stim': u'stim/topo.png'}]
    Routine trial
  LoopTerminator trials
  Routine end
