PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u'test', u'condition': u'midd'}
  expName = prodShadow
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 1.0
      store = first key
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    TextComponent text_4
      color = red
      text [set every repeat] = $text
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    TextComponent text_5
      text = es la palabra
      pos = [0, -0.25]
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    SoundComponent sound_1
      sound [set every repeat] = $stim
      startVal [time (s)] = 0.5
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  Routine ident
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Di tu nombre completo.

        Luego presiona la barra espaciadora para continuar.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent text_2
      text = Gracias por participar
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instr
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Repite las frases siguientes.

        Presiona la barra espaciadora para
        continuar
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 2.0
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Flow
  Routine ident
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{u'status': u'distractor', u'text': u'ada', u'stim': u'stim/ada.wav'},
      {u'status': u'distractor', u'text': u'apa', u'stim': u'stim/apa.wav'},
      {u'status': u'target', u'text': u'baka', u'stim': u'stim/baka.wav'},
      {u'status': u'pname', u'text': u'bala', u'stim': u'stim/bala.wav'},
      {u'status': u'target', u'text': u'beke', u'stim': u'stim/beke.wav'},
      {u'status': u'target', u'text': u'biki', u'stim': u'stim/biki.wav'},
      {u'status': u'target', u'text': u'boko', u'stim': u'stim/boko.wav'},
      {u'status': u'pname', u'text': u'bola', u'stim': u'stim/bola.wav'},
      {u'status': u'target', u'text': u'buku', u'stim': u'stim/buku.wav'},
      {u'status': u'pname', u'text': u'caca', u'stim': u'stim/caca.wav'},
      {u'status': u'pname', u'text': u'coco', u'stim': u'stim/coco.wav'},
      {u'status': u'pname', u'text': u'dado', u'stim': u'stim/dado.wav'},
      {u'status': u'target', u'text': u'daka', u'stim': u'stim/daka.wav'},
      {u'status': u'target', u'text': u'deke', u'stim': u'stim/deke.wav'},
      {u'status': u'target', u'text': u'diki', u'stim': u'stim/diki.wav'},
      {u'status': u'pname', u'text': u'dodo', u'stim': u'stim/dodo.wav'},
      {u'status': u'target', u'text': u'doko', u'stim': u'stim/doko.wav'},
      {u'status': u'target', u'text': u'duku', u'stim': u'stim/duku.wav'},
      {u'status': u'distractor', u'text': u'eda', u'stim': u'stim/eda.wav'},
      {u'status': u'distractor', u'text': u'epa', u'stim': u'stim/epa.wav'},
      {u'status': u'target', u'text': u'gaka', u'stim': u'stim/gaka.wav'},
      {u'status': u'pname', u'text': u'gato', u'stim': u'stim/gato.wav'}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
    Routine trial
  LoopTerminator trials
  Routine end
